PsychoPy2experiment version="2020.2.10"
Settings
  Data filename = u'data/subj%s_run%s_%s_%s' % (expInfo['participant'], expInfo['run'], expName, expInfo['date'])
  Experiment info = {'participant': '', 'run': '0001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = localizer
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Routines
  Routine trial
    CodeComponent trial_code
      Code Type = Py
      Begin Routine:
        if thisTrial['block_type'] == 'null_block':
            image.opacity = 0
        else:
            image.opacity = 1


        trials.addData('real_timestamp_trial_start', datetime.datetime.today().strftime('%Y-%m-%d-%H:%M:%S.%f'))
      Each Frame:
        if thisTrial['block_type'] == 'null_block':
            image.opacity = 0
            continueRoutine=False
    ImageComponent image
      image [set every repeat] = $"localizer//stimuli//" + img_name
      size = (.8,.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .3
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    PolygonComponent fixation
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[-1,-1,-1]
      shape = cross
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .8
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    KeyboardComponent repeat_response
      allowedKeys = 'y'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .8
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  Routine instructions
    TextComponent instruction_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Please fixate on the crosshair and pay attention to each image.
        The images will go by quickly.

        Press the button with your INDEX FINGER if an image appears twice in a row.

        Get ready!
    KeyboardComponent key_resp
      allowedKeys = 'space','b','r','g','y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine wait_for_t
    KeyboardComponent scanner_t
      allowedKeys = 't'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent wait_for_t_code
      Code Type = Py
      Begin Experiment:
        import datetime

        subject = str(expInfo['participant'])
        subject = 'subj0' + subject[-3:]
        session = 'run%04d' % int(expInfo['run'])

        sequence_file = 'localizer' + os.sep + 'sequences' + os.sep + 'loc_' + subject + '_' + session + '.csv'

        win.mouseVisible = False
      Each Frame:
        if thisTrial['block_type'] != 'block_start' and thisTrial['block_type'] != 'null_block':
            continueRoutine = False
    PolygonComponent fixation_wait_for_t
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      shape = cross
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
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  Routine null_block
    PolygonComponent fixation_null
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      shape = cross
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
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    CodeComponent null_block_code
      Code Type = Py
      Each Frame:
        if thisTrial['block_type'] != 'null_block':
            continueRoutine=False
  Routine end
    TextComponent end_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = That concludes this run.
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $sequence_file
    loopType = sequential
    nReps = 1
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    Routine wait_for_t
    Routine trial
    Routine null_block
  LoopTerminator trials
  Routine end
